// Example element demonstrating how to perform a BLAST search using the megablast algorithm

protocol BlastSearch

import (
	"fmt"
	"github.com/antha-lang/antha/antha/AnthaStandardLibrary/Packages/sequences/blast"
	biogo "github.com/antha-lang/antha/internal/github.com/biogo/ncbi/blast"
	
)
// Input parameters for this protocol
Parameters (
	Query string//Amount
	Querytype string
	
)

// Data which is returned from this protocol
Data (
	Hits string
)

// Physical inputs to this protocol
Inputs (

)

// Physical outputs from this protocol
Outputs (
)

Requirements {

}

// Actions to perform before protocol itself
Setup {

}

// Core process of the protocol: steps to be performed for each input
Steps {
	
	var err error
	var hits []biogo.Hit
	
	if Querytype == "PROTEIN" {
	hits, err = blast.MegaBlastP(Query)
	if err != nil {
		fmt.Println(err.Error())
	}
	
	Hits = fmt.Sprintln(blast.HitSummary(hits))

	
	} else if Querytype == "DNA" {
	hits, err = blast.MegaBlastN(Query)
	if err != nil {
		fmt.Println(err.Error())
	}
	
	Hits = fmt.Sprintln(blast.HitSummary(hits))
	} 
	
}

// Actions to perform after steps block to analyze data
Analysis {

}

Validation {

}
