// Generates instructions to pipette out a defined image onto a defined plate using a defined palette of colours
protocol PipetteImage

import (
	"github.com/antha-lang/antha/antha/anthalib/wtype"
	"github.com/antha-lang/antha/antha/AnthaStandardLibrary/Packages/image"
	"github.com/antha-lang/antha/antha/anthalib/mixer"
	"fmt"
)


// Input parameters for this protocol (data)
Parameters (
	VolumePerWell  Volume
	Imagefilename string
	Palettename string
	AvailableColours []string
	OnlythisColour string
	NotthisColour string
)

// Data which is returned from this protocol, and data types
Data (
	Numberofpixels int
)


// Physical Inputs to this protocol with types
Inputs (
	Colourcomponents []*wtype.LHComponent
	//InPlate *wtype.LHPlate
	OutPlate *wtype.LHPlate
)

// Physical outputs from this protocol with types
Outputs (
	 Pixels[]*wtype.LHComponent
)

Requirements {
	
}

// Conditions to run on startup
Setup {
	
}

// The core process for this protocol, with the steps to be performed
// for every input
Steps {
	
	
	chosencolourpalette := image.AvailablePalettes[Palettename]
	positiontocolourmap, _ := image.ImagetoPlatelayout(Imagefilename, OutPlate, &chosencolourpalette) 
	
	//Pixels = image.PipetteImagetoPlate(OutPlate, positiontocolourmap, AvailableColours, Colourcomponents, VolumePerWell)

	componentmap, err := image.MakestringtoComponentMap(AvailableColours, Colourcomponents)
	if err != nil {
		panic(err)
	}

	solutions := make([]*wtype.LHComponent, 0)

	counter := 0
	// currently set up to only pipette if yellow (to make visualisation easier in trilution simulator
	for locationkey, colour := range positiontocolourmap {
		
		component := componentmap[image.Colourcomponentmap[colour]]

		if component.TypeName() == "dna" {
			component.Type = wtype.LTDoNotMix//"DoNotMix"
		}
		fmt.Println(image.Colourcomponentmap[colour])
		
		if OnlythisColour !="" {
	
		if image.Colourcomponentmap[colour] == OnlythisColour{
			counter = counter + 1
			fmt.Println("wells",counter)
		pixelSample := mixer.Sample(component, VolumePerWell)
		solution := MixTo(OutPlate.Type, locationkey, 0, pixelSample)
		solutions = append(solutions, solution)
			}
			
		}else{
			if component.CName != NotthisColour{
			counter = counter + 1
			fmt.Println("wells",counter)
		pixelSample := mixer.Sample(component, VolumePerWell)
		solution := MixTo(OutPlate.Type, locationkey, 0, pixelSample)
		solutions = append(solutions, solution)
		}
		}
	}

	Numberofpixels = len(Pixels)
	fmt.Println("Pixels =",Numberofpixels)
	Pixels = solutions
	
}
// Run after controls and a steps block are completed to
// post process any data and provide downstream results
Analysis {
}

// A block of tests to perform to validate that the sample was processed correctly
// Optionally, destructive tests can be performed to validate results on a
// dipstick basis
Validation {
	
}

